<?xml version="1.0" encoding="UTF-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="de.fau" Category="robot"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>RobotController</Identifier>
    <DisplayName>Robot Controller</DisplayName>
    <Description>Controller for a Panda robot arm.</Description>

    <Command>
        <Identifier>GetCurrentFrame</Identifier>
        <DisplayName>Get Current Frame</DisplayName>
        <Description>Get the current joint values.</Description>
        <Observable>No</Observable>
        <Response>
            <Identifier>Frame</Identifier>
            <DisplayName>Frame</DisplayName>
            <Description>The absolute joint values.</Description>
            <DataType>
                <DataTypeIdentifier>Frame</DataTypeIdentifier>
            </DataType>
        </Response>
    </Command>

    <Command>
        <Identifier>GetCurrentPose</Identifier>
        <DisplayName>Get Current Pose</DisplayName>
        <Description>Get the current position and orientation of the robot hand.</Description>
        <Observable>No</Observable>
        <Response>
            <Identifier>Pose</Identifier>
            <DisplayName>Pose</DisplayName>
            <Description>The pose to query.</Description>
            <DataType>
                <DataTypeIdentifier>Pose</DataTypeIdentifier>
            </DataType>
        </Response>
    </Command>

    <Command>
        <Identifier>MoveToPose</Identifier>
        <DisplayName>Move To Pose</DisplayName>
        <Description>Move to a given position and with a given orientation.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>Pose</Identifier>
            <DisplayName>Pose</DisplayName>
            <Description>The pose to move to.</Description>
            <DataType>
                <DataTypeIdentifier>Pose</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>InvalidPose</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>MoveToSite</Identifier>
        <DisplayName>Move To Site</DisplayName>
        <Description>Move to a given site without approaching.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>Site to move to.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
            <Identifier>InvalidPose</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>MoveRelative</Identifier>
        <DisplayName>Move Relative</DisplayName>
        <Description>Move in the given direction without changing the current orientation of the robot hand.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>RelativeMove</Identifier>
            <DisplayName>Relative Move</DisplayName>
            <Description>The position changing move operation.</Description>
            <DataType>
                <DataTypeIdentifier>RelativeMove</DataTypeIdentifier>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>TransportPlate</Identifier>
        <DisplayName>Transport Plate</DisplayName>
        <Description>Transports a plate between the two given sites.</Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>OriginSiteId</Identifier>
            <DisplayName>Origin Site ID</DisplayName>
            <Description>Site to move the plate from.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>DestinationSiteId</Identifier>
            <DisplayName>Destination Site ID</DisplayName>
            <Description>Site to move the plate to.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>PlateType</Identifier>
            <DisplayName>Plate Type</DisplayName>
            <Description>The plate type to grab.</Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
            <Identifier>LostPlate</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>PickPlate</Identifier>
        <DisplayName>Pick Plate</DisplayName>
        <Description>Pick up a plate from a given site.</Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>Site to pick plate from.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>PlateType</Identifier>
            <DisplayName>Plate Type</DisplayName>
            <Description>The plate type to grab.</Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
            <Identifier>InvalidPose</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>PlacePlate</Identifier>
        <DisplayName>Place Plate</DisplayName>
        <Description>Place a plate on a given site.</Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>Site to place the plate on.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>PlateTypeId</Identifier>
            <DisplayName>Plate Type ID</DisplayName>
            <Description>The ID for the plate type to grab.</Description>
            <DataType>
                <Constrained>
                    <DataType>
                        <Basic>String</Basic>
                    </DataType>
                    <Constraints>
                        <MaximalLength>255</MaximalLength>
                        <Pattern>[a-zA-Z0-9_'-]+</Pattern>
                    </Constraints>
                </Constrained>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>SiteNotFound</Identifier>
            <Identifier>PlateTypeIdNotFound</Identifier>
            <Identifier>InvalidPose</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>IsSiteOccupied</Identifier>
        <DisplayName>Is Site Occupied</DisplayName>
        <Description>Check if the given site is currently occupied with a sample.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The Site to check.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>IsOccupied</Identifier>
            <DisplayName>Is Occupied</DisplayName>
            <Description>Boolean describing if site is occupied or not.</Description>
            <DataType>
                <Basic>Boolean</Basic>
            </DataType>
        </Response>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>FollowPath</Identifier>
        <DisplayName>Follow Path</DisplayName>
        <Description>Follows a path of poses.</Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>PoseList</Identifier>
            <DisplayName>Pose List</DisplayName>
            <Description>A list of poses to follow along.</Description>
            <DataType>
                <List>
                    <DataType>
                        <DataTypeIdentifier>Pose</DataTypeIdentifier>
                    </DataType>
                </List>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>SetToFrame</Identifier>
        <DisplayName>Set To Frame</DisplayName>
        <Description>Sets the absolute joint values.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>Frame</Identifier>
            <DisplayName>Frame</DisplayName>
            <Description>The frame to set the joints to.</Description>
            <DataType>
                <DataTypeIdentifier>Frame</DataTypeIdentifier>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>FollowFrames</Identifier>
        <DisplayName>Follow Frames</DisplayName>
        <Description>Successively set the absolute joint values.</Description>
        <Observable>Yes</Observable>
        <Parameter>
            <Identifier>FrameList</Identifier>
            <DisplayName>FrameList</DisplayName>
            <Description>The list of frames to sequence.</Description>
            <DataType>
                <Constrained>
                    <DataType>
                        <List>
                            <DataType>
                                <DataTypeIdentifier>Frame</DataTypeIdentifier>
                            </DataType>
                        </List>
                    </DataType>
                    <Constraints>
                        <MinimalElementCount>1</MinimalElementCount>
                    </Constraints>
                </Constrained>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>SetGripper</Identifier>
        <DisplayName>Set Gripper</DisplayName>
        <Description>Sets the distance between the two finger to the given width. This operation can be used to open or close the gripper.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>Width</Identifier>
            <DisplayName>Width</DisplayName>
            <Description>The width between the two finger.</Description>
            <DataType>
                <Constrained>
                    <DataType>
                        <Basic>Real</Basic>
                    </DataType>
                    <Constraints>
                        <MinimalInclusive>0</MinimalInclusive>
                        <MaximalInclusive>8</MaximalInclusive>
                        <Unit>
                            <Label>cm</Label>
                            <Factor>0.01</Factor>
                            <Offset>0</Offset>
                            <UnitComponent>
                                <SIUnit>Meter</SIUnit>
                                <Exponent>1</Exponent>
                            </UnitComponent>
                        </Unit>
                    </Constraints>
                </Constrained>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>CloseGripper</Identifier>
        <DisplayName>Close Gripper</DisplayName>
        <Description>Closes the gripper.</Description>
        <Observable>No</Observable>
    </Command>

    <DataTypeDefinition>
        <Identifier>Frame</Identifier>
        <DisplayName>Frame</DisplayName>
        <Description>Absolute joint values describing a frame.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <List>
                        <DataType>
                            <Basic>Real</Basic>
                        </DataType>
                    </List>
                </DataType>
                <Constraints>
                    <ElementCount>7</ElementCount>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>SiteId</Identifier>
        <DisplayName>Site ID</DisplayName>
        <Description>The string identifier of the Site.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Pattern>[a-zA-Z0-9_'-]+</Pattern>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>Pose</Identifier>
        <DisplayName>Pose</DisplayName>
        <Description>The pose of the end-effector. The pose itself consists of two parts: The position as vector (XYZ) and the orientation as quaternion (XYZW).</Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>X</Identifier>
                    <DisplayName>X</DisplayName>
                    <Description>The X position of the Site.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-0.855</MinimalInclusive>
                                <MaximalInclusive>0.855</MaximalInclusive>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Y</Identifier>
                    <DisplayName>Y</DisplayName>
                    <Description>The Y position of the Site.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-0.855</MinimalInclusive>
                                <MaximalInclusive>0.855</MaximalInclusive>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Z</Identifier>
                    <DisplayName>Z</DisplayName>
                    <Description>The Z position defining the relative height.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-0.360</MinimalInclusive>
                                <MaximalInclusive>1.19</MaximalInclusive>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriX</Identifier>
                    <DisplayName>Orientation X</DisplayName>
                    <Description>The X value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriY</Identifier>
                    <DisplayName>Orientation Y</DisplayName>
                    <Description>The Y value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriZ</Identifier>
                    <DisplayName>Orientation Z</DisplayName>
                    <Description>The Z value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriW</Identifier>
                    <DisplayName>Orientation W</DisplayName>
                    <Description>The W value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>RelativeMove</Identifier>
        <DisplayName>Relative Move</DisplayName>
        <Description>A relative move to the given direction without changing the orientation of the robot hand.</Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>X</Identifier>
                    <DisplayName>X</DisplayName>
                    <Description>The X direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Y</Identifier>
                    <DisplayName>Y</DisplayName>
                    <Description>The Y direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Z</Identifier>
                    <DisplayName>Z</DisplayName>
                    <Description>The Z direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>MinDist</Identifier>
                    <DisplayName>Minimal Distance</DisplayName>
                    <Description>The minimal distance to move.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>cm</Label>
                                    <Factor>0.01</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>DesiredDist</Identifier>
                    <DisplayName>Desired Distance</DisplayName>
                    <Description>The desired distance to move.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>cm</Label>
                                    <Factor>0.01</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>

    <DefinedExecutionError>
        <Identifier>SiteIdNotFound</Identifier>
        <DisplayName>Site ID not found</DisplayName>
        <Description>The given Site ID does not exist or could not be found.</Description>
    </DefinedExecutionError>

    <DefinedExecutionError>
        <Identifier>PlateTypeIdNotFound</Identifier>
        <DisplayName>Plate Type ID not found</DisplayName>
        <Description>The given plate type ID could not be found or does not exist.</Description>
    </DefinedExecutionError>

    <DefinedExecutionError>
        <Identifier>InvalidPose</Identifier>
        <DisplayName>Invalid Pose</DisplayName>
        <Description>The given pose is invalid, not within reach or would cause a collision.</Description>
    </DefinedExecutionError>

    <DefinedExecutionError>
        <Identifier>InvalidFrame</Identifier>
        <DisplayName>Invalid Frame</DisplayName>
        <Description>The given joint values are invalid or could not be set.</Description>
    </DefinedExecutionError>
</Feature>
