<?xml version="1.0" encoding="UTF-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="de.fau" Category="robot"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>SiteManager</Identifier>
    <DisplayName>Site Manager</DisplayName>
    <Description>Manager to set and remove sites which define the pick-up and drop locations for the robot gripper.</Description>

    <Property>
        <Identifier>Sites</Identifier>
        <DisplayName>Sites</DisplayName>
        <Description>Shows all available site IDs.</Description>
        <Observable>No</Observable>
        <DataType>
            <List>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
            </List>
        </DataType>
    </Property>

    <Command>
        <Identifier>GetSite</Identifier>
        <DisplayName>Get Site</DisplayName>
        <Description>Gets the site with the given ID.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The site to get.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>Site</Identifier>
            <DisplayName>Site</DisplayName>
            <Description>The site and its values.</Description>
            <DataType>
                <!-- 
                Since the sila2codegenerator v0.3.3-dev is not able to generate the 
                corrensponding response, a string is temporarly used to show the results.
                (2021-01-26, florian.bauer.dev@gmail.com) 
                -->
                <Basic>String</Basic>
                <!--
                <Structure>
                    <Element>
                        <Identifier>Pose</Identifier>
                        <DisplayName>Pose</DisplayName>
                        <Description>The pose to reach the site.</Description>
                        <DataType>
                            <DataTypeIdentifier>Pose</DataTypeIdentifier>
                        </DataType>
                    </Element>
                    <Element>
                        <Identifier>Approach</Identifier>
                        <DisplayName>Approach</DisplayName>
                        <Description>Defines a movement to approach an item on/inside the site (e.g. to pick-up from above).</Description>
                        <DataType>
                            <DataTypeIdentifier>RelativeMove</DataTypeIdentifier>
                        </DataType>
                    </Element>
                    <Element>
                        <Identifier>Retreat</Identifier>
                        <DisplayName>Retreat</DisplayName>
                        <Description>Defines a movement to retreat from an item on/inside the site (e.g. to move sideways after placing something). If no retreat is set, the reversed approach movement is used.</Description>
                        <DataType>
                            <Constrained>
                                <DataType>
                                    <List>
                                        <DataType>
                                            <DataTypeIdentifier>RelativeMove</DataTypeIdentifier>
                                        </DataType>
                                    </List>
                                </DataType>
                                <Constraints>
                                    <MaximalElementCount>1</MaximalElementCount>
                                </Constraints>
                            </Constrained>
                        </DataType>
                    </Element>
                </Structure>
                -->
            </DataType>
        </Response>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>SetSite</Identifier>
        <DisplayName>Set Site</DisplayName>
        <Description>Adds or overwrites a site. The orientation is defined by an quaternion (XYZW).</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The site to set.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>Pose</Identifier>
            <DisplayName>Pose</DisplayName>
            <Description>The pose to reach the site.</Description>
            <DataType>
                <DataTypeIdentifier>Pose</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>Approach</Identifier>
            <DisplayName>Approach</DisplayName>
            <Description>Defines a movement to approach an item on/inside the site (e.g. to pick-up from above).</Description>
            <DataType>
                <DataTypeIdentifier>RelativeMove</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>Retreat</Identifier>
            <DisplayName>Retreat</DisplayName>
            <Description>Defines a movement to retreat from an item on/inside the site (e.g. to move sideways after placing something). If no retreat is set, the reversed approach movement is used.</Description>
            <DataType>
                <Constrained>
                    <DataType>
                        <List>
                            <DataType>
                                <DataTypeIdentifier>RelativeMove</DataTypeIdentifier>
                            </DataType>
                        </List>
                    </DataType>
                    <Constraints>
                        <MaximalElementCount>1</MaximalElementCount>
                    </Constraints>
                </Constrained>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>DeleteSite</Identifier>
        <DisplayName>Delete Site</DisplayName>
        <Description>Removes a site from the manager.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The site to delete.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>IsSiteOccupied</Identifier>
        <DisplayName>Is Site Occupied</DisplayName>
        <Description>Check if the given site is currently occupied with a sample.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The Site to check.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>IsOccupied</Identifier>
            <DisplayName>Is Occupied</DisplayName>
            <Description>Boolean describing if site is occupied or not.</Description>
            <DataType>
                <Basic>Boolean</Basic>
            </DataType>
        </Response>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>PutPlateOnSite</Identifier>
        <DisplayName>Put Plate On Site</DisplayName>
        <Description>Puts a plate instance form the given plate type on the site.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>PlateTypeId</Identifier>
            <DisplayName>Plate Type ID</DisplayName>
            <Description>The ID of the plate type.</Description>
            <DataType>
                <DataTypeIdentifier>PlateTypeId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The ID of the site.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>PlateTypeIdNotFound</Identifier>
            <Identifier>SiteIdNotFound</Identifier>
            <Identifier>SiteAlreadyOccupied</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <Command>
        <Identifier>RemovePlateFromSite</Identifier>
        <DisplayName>Remove Plate From Site</DisplayName>
        <Description>Removes plate instance form the given pate type to the site.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The ID of the site.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
            <Identifier>SiteIsEmpty</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <DataTypeDefinition>
        <Identifier>SiteId</Identifier>
        <DisplayName>Site ID</DisplayName>
        <Description>The string identifier of the site.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <MaximalLength>255</MaximalLength>
                    <Pattern>[a-zA-Z0-9_'-]+</Pattern>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>Pose</Identifier>
        <DisplayName>Pose</DisplayName>
        <Description>The pose of the end-effector. The pose itself consists of two parts: The position as vector (XYZ) and the orientation as quaternion (XYZW).</Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>X</Identifier>
                    <DisplayName>X</DisplayName>
                    <Description>The X position of the site.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-0.855</MinimalInclusive>
                                <MaximalInclusive>0.855</MaximalInclusive>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Y</Identifier>
                    <DisplayName>Y</DisplayName>
                    <Description>The Y position of the site.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-0.855</MinimalInclusive>
                                <MaximalInclusive>0.855</MaximalInclusive>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Z</Identifier>
                    <DisplayName>Z</DisplayName>
                    <Description>The Z position defining the relative height.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-0.360</MinimalInclusive>
                                <MaximalInclusive>1.19</MaximalInclusive>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriX</Identifier>
                    <DisplayName>Orientation X</DisplayName>
                    <Description>The X value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriY</Identifier>
                    <DisplayName>Orientation Y</DisplayName>
                    <Description>The Y value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriZ</Identifier>
                    <DisplayName>Orientation Z</DisplayName>
                    <Description>The Z value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriW</Identifier>
                    <DisplayName>Orientation W</DisplayName>
                    <Description>The W value.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>RelativeMove</Identifier>
        <DisplayName>Relative Move</DisplayName>
        <Description>A relative move to the given direction without changing the orientation of the end-effector.</Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>X</Identifier>
                    <DisplayName>X</DisplayName>
                    <Description>The X direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Y</Identifier>
                    <DisplayName>Y</DisplayName>
                    <Description>The Y direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Z</Identifier>
                    <DisplayName>Z</DisplayName>
                    <Description>The Z direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>MinDist</Identifier>
                    <DisplayName>Minimal Distance</DisplayName>
                    <Description>The minimal distance to move.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>cm</Label>
                                    <Factor>0.01</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>DesiredDist</Identifier>
                    <DisplayName>Desired Distance</DisplayName>
                    <Description>The desired distance to move.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>cm</Label>
                                    <Factor>0.01</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>PlateTypeId</Identifier>
        <DisplayName>Plate Type ID</DisplayName>
        <Description>The string identifier of the plate type.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <MaximalLength>255</MaximalLength>
                    <Pattern>[a-zA-Z0-9_'-]+</Pattern>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>

    <DefinedExecutionError>
        <Identifier>SiteIdNotFound</Identifier>
        <DisplayName>Site ID not found</DisplayName>
        <Description>The given site ID could not be found or does not exist.</Description>
    </DefinedExecutionError>

    <DefinedExecutionError>
        <Identifier>SiteAlreadyOccupied</Identifier>
        <DisplayName>Site already occupied</DisplayName>
        <Description>The given site is already occupied by another item.</Description>
    </DefinedExecutionError>

    <DefinedExecutionError>
        <Identifier>SiteIsEmpty</Identifier>
        <DisplayName>Site is empty</DisplayName>
        <Description>Can not remove a item from an empty site.</Description>
    </DefinedExecutionError>

    <DefinedExecutionError>
        <Identifier>PlateTypeIdNotFound</Identifier>
        <DisplayName>Plate Type ID not found</DisplayName>
        <Description>The given plate type ID could not be found or does not exist.</Description>
    </DefinedExecutionError>
</Feature>
